PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1920, 1080]
  backgroundFit = fill
  colPriority = {'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW', '': ''}
  color = -1.0000, -1.0000, -1.0000
  expName = EEGSternberg
  frameRateMsg = initializing screen!
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine response
    RoutineSettingsComponent response
      stopVal [duration (s)] = timing_map["dResponse"]
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    KeyboardComponent key_resp
      allowedKeys = 'comma','period'
      correctAns = $stim_map["map_correct"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent key_response_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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  Routine button_record
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    CodeComponent code_fb
      Code Type = Auto->JS
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      Begin Routine:
        # display feedback to log
        print(key_resp.keys,"was pressed\n")
        try:
            if key_resp.keys == None:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'please respond within a shorter time period.\nPress any key to continue.'
                timing_map["dFb"] = TIMEOUT_DURATION
                fb_col = 'white'
                stim_map["loop_iter"] -= 1
                stim_map["loop_maxcount"] -= 1
                stim_map["cross_en"] = False
            elif key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'

        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1
        print("loop_iter =", stim_map["loop_iter"], '\n',
              "loop_count =", stim_map["loop_count"], '\n')
        if stim_map["loop_iter"] == stim_map["loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            stim_map["cross_en"] = False
      End Routine:
        # ensure that fb is reset to 1
        timing_map["dFb"] = DEFAULT_FEEDBACK
    TextComponent fb_disp
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      text [set every repeat] = $fb_text
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    KeyboardComponent fb_keyboard_continue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      store = nothing
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  Routine prompt
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    TextComponent string_prompt_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    ImageComponent black_screendelay
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = timing_map["dPrompt"]
      stopVal [duration (s)] = timing_map["dBlank"]
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  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_disp
      letterHeight = 0.10
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_disp_text
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    KeyboardComponent key_nex
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_initfunction
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import string
        import socket

        # constants declaration
        TIMEOUT_DURATION = 10
        CHARACTER_INCREMENT = 2
        DEFAULT_FEEDBACK = 1

        # timing of each stimulus (global variables)
        timing_map = {"dCross": 2,
                      "dBlank": 1,
                      "dPrompt": 1,
                      "dResponse": 1,
                      "dButton": 1,
                      "dFb": 1,
                      "p_dCross": 5,
                      "p_dBlank": 4,
                      "p_dPrompt": 1,
                      "p_dResponse": 1,
                      "p_dButton": 2,
                      "p_dFb": 2
                      }

        # stimulus text, feedback, and loop count
        # before each cycle, update each variable
        # string_prompt: stimulus display
        # key_prompt: key selected to display
        # map_correct: button press validation
        # loop_iter: used to keep track of loops
        # loop_count: set max loop count
        # cross_en: keep track of fixation period

        stim_map = {"loop_iter": 0,
                        "loop_count": 3,
                        "loop_maxcount": 9,
                        "char_length": 3,
                        "string_prompt": "",
                        "key_prompt": "",
                        "map_correct": None,
                        "cross_en": False,
                        "instruction_text": "",
                        "iter_text_list": 0,
                        "p_loop_maxcount": 6,
                        "p_loop_count": 2
                        }

        text_list = ["+",
                     "b y g d f",
                     "",
                     "g",
                     "*feedback*",
                     "We will now begin the practice trial."]
        # variables to move text
        loopcount_text_list = len(text_list)
        # ensure it is initialized (bruh)
        stim_map["instruction_text"] = text_list[stim_map["iter_text_list"]]



        # initialize udp connection to MATLAB
        UDP_IP = "127.0.0.1"
        UDP_PORT = 8000
        sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)

        # UDP int values, sent to MATLAB
        udp_map = {"fixation": bytes([1]),
                   "encoding": bytes([2]),
                   "maintenance": bytes([3]),
                   "retrieval": bytes([4])}

        # send value to UDP Port, mapped via udp_map
        def matlab_send(stage):
            if stage in udp_map:
                sock.sendto(udp_map[stage], (UDP_IP, UDP_PORT))


        # return a character for response stimulus
        def gen_key(string_prompt, correct_rate = 0.5):
            trunc_chars = str.maketrans('', '', string_prompt)
            trunc_string = string.ascii_lowercase.translate(trunc_chars)
            valid_string = string_prompt.replace(" ", "")
            return random.choice(trunc_string) if correct_rate < random.random() else random.choice(valid_string)


        # generate list of characters for encoding, must be stored for checking validity in sb_validate
        def sb_rand(num_letters = 4):
            if num_letters > 26:
                return "Error: num_letters must be less than or equal to 26"
            else:
                return " ".join(random.sample(string.ascii_lowercase, num_letters))

        # supply string_prompt and char_key to check if the key is valid
        def sb_validate(string_prompt, char_key):
            return char_key in string_prompt

        # after supplying sb_rand to the stimulus, run gen_key to generate a key.
        # then run sb_validate to check if the key is valid. If sb_validate returns True,
        # use bool response to display correct/incorrect response.
        def input_val(validation, correct_key = 'period', incorrect_key = 'comma'):
                return correct_key if validation else incorrect_key


        # make sure all text boxes are initialized!
        intro_disp_text = "Hello! Thank you for participating in the Sternberg Working Memory Task."
        intro_small_text = "Please wait for the experimenter to continue."
        instruction_text = ""
        maintrial_text = "The main experiment will now begin. Please press any key to begin."
        p_cross_text = "focus on the cross"
        p_string_prompt_text = "memorize these characters"
        p_timeout_text = "please respond in a shorter timeframe!"
        # initialize logging function
    TextComponent intro_small
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_small_text
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  Routine cross_fix
    RoutineSettingsComponent cross_fix
      skipIf = stim_map["cross_en"]
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dCross"]
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    CodeComponent code_crossen
      Code Type = Auto->JS
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      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
  Routine initcodevalues
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    CodeComponent code_loopvalue
      Code Type = Auto->JS
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      Begin Routine:
        # initialize values in map
        stim_map["loop_iter"] = 0
        stim_map["loop_count"] = 0
        stim_map["char_length"] = 3

        # reset prompt
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))


        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
  Routine test
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    PolygonComponent fixation_4afc
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_left_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_right_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image [set during: images_2afc.ISI_load_images] = default.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image = default.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_4afc
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine routine_1
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine instruction_page
    RoutineSettingsComponent instruction_page
      saveStartStop = False
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    TextComponent instruction
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["instruction_text"]
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    CodeComponent code_textshift
      Code Type = Auto->JS
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      End Routine:
        # go to next text
        stim_map["iter_text_list"] += 1
        if stim_map["iter_text_list"] != loopcount_text_list:
            print("now on text", stim_map["iter_text_list"], "\n")
            stim_map["instruction_text"] = text_list[stim_map["iter_text_list"]]
    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_code_init
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    CodeComponent p_codeinit
      Code Type = Auto->JS
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      Begin Routine:
        # initialize values in map
        stim_map["string_prompt"] = sb_rand(stim_map["char_length"])
        stim_map["key_prompt"] = gen_key(stim_map["string_prompt"])
        stim_map["map_correct"] = input_val(sb_validate(stim_map["string_prompt"],
                                              stim_map["key_prompt"]))


        print("string prompt is", stim_map["string_prompt"], "\n",
              "key prompt is", stim_map["key_prompt"], "\n",
              "button to indicate correct is", stim_map["map_correct"], "\n")
  Routine p_cross_fix
    RoutineSettingsComponent p_cross_fix
      saveStartStop = False
      skipIf = stim_map["cross_en"]
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    PolygonComponent cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dCross"]
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    CodeComponent p_code_crossen
      Code Type = Auto->JS
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      End Routine:
        # set in routine to skip if cross_en == True
        stim_map["cross_en"] = True
        timing_map["dCross"]
    TextComponent p_cross_text_block
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dCross"]
      text = $p_cross_text
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  Routine p_prompt
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    TextComponent p_string_prompt_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dPrompt"]
      text [set every repeat] = $stim_map["string_prompt"]
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    ImageComponent p_black_screendelay
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = timing_map["dPrompt"]
      stopVal [duration (s)] = timing_map["dBlank"]
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    TextComponent p_string_prompt_text_block
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dPrompt"]
      text = $p_string_prompt_text
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  Routine p_response
    RoutineSettingsComponent p_response
      stopVal [duration (s)] = timing_map["p_dResponse"]
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    KeyboardComponent p_key_resp
      allowedKeys = 'comma','period'
      correctAns = $stim_map["map_correct"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent p_key_response_disp
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_map["key_prompt"]
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    TextComponent p_timeout_block
      letterHeight = 0.05
      startVal [time (s)] = timing_map["p_dFb"]
      text = $p_timeout_text
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  Routine p_button_record
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    CodeComponent p_code_fb
      Code Type = Auto->JS
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      Begin Routine:
        # display feedback to log
        print(p_key_resp.keys,"was pressed\n")
        try:
            if p_key_resp.keys == None:
                # add timeout text, decrement loop, enable fixation
                fb_text = 'please respond within a shorter time period.\nPress any key to continue.'
                timing_map["p_dFb"] = TIMEOUT_DURATION
                fb_col = 'white'
                stim_map["loop_iter"] -= 1
                stim_map["p_loop_maxcount"] -= 1
                stim_map["cross_en"] = False
            elif p_key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'

        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')


        # increment loop, enable cross if loop reaches max
        stim_map["loop_iter"] += 1
        print("loop_iter =", stim_map["loop_iter"], '\n',
              "p_loop_count =", stim_map["p_loop_count"], '\n')
        if stim_map["loop_iter"] == stim_map["p_loop_count"]:
            stim_map["loop_iter"] = 0
            stim_map["char_length"] += CHARACTER_INCREMENT
            stim_map["cross_en"] = False
      End Routine:
        # ensure that fb is reset to 1
        timing_map["dFb"] = DEFAULT_FEEDBACK
    TextComponent p_fb_disp
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["p_dFb"]
      text [set every repeat] = $fb_text
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    KeyboardComponent p_fb_keyboard_continue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = timing_map["dFb"]
      store = nothing
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  Routine instruction_maintrial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $maintrial_text
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    KeyboardComponent continue_maintrial
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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Flow
  Routine intro
  LoopInitiator loop_instruction loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = loopcount_text_list
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    Routine instruction_page
  LoopTerminator loop_instruction
  LoopInitiator loop_practice loopType="TrialHandler"
    loopType = sequential
    nReps = stim_map["p_loop_maxcount"]
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    Routine p_code_init
    Routine p_cross_fix
    Routine p_prompt
    Routine p_response
    Routine p_button_record
  LoopTerminator loop_practice
  Routine instruction_maintrial
  Routine countdown
  LoopInitiator loop_maintrial loopType="TrialHandler"
    conditions = [{'dCross': 1, 'dBlank': 1, 'dPrompt': 1, 'dResponse': 1, 'dButton': 1, 'dFb': 1}]
    loopType = sequential
    nReps = stim_map["loop_maxcount"]
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    Routine initcodevalues
    Routine cross_fix
    Routine prompt
    Routine response
    Routine button_record
  LoopTerminator loop_maintrial
